PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = psychopy test
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    CodeComponent setLables
      Code Type = Auto->JS
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      Begin Experiment:
        # Begin Routine (safe): build prepare/cue strings and assign colors robustly

        # default safe values
        prepare_text = "Prepare..."
        cue_text = "..."
        prepare_color = 'grey'
        cue_color = 'grey'

        # retrieve action if it exists (from conditions file or earlier code)
        try:
            act = str(action).strip()
            if act == 'None' or act == '':
                raise NameError
        except Exception:
            # fallback if 'action' isn't defined or empty
            act = "both eyes blink"  # <-- change this default if you want a different fallback

        # set texts
        prepare_text = "Prepare: " + act
        cue_text = act

        # normalize to lowercase for checks
        al = act.lower()

        # assign colors based on keywords; ensures variables are always assigned
        if 'eye' in al or 'blink' in al:
            prepare_color = 'crimson'
            cue_color = 'crimson'
        elif 'jaw' in al or 'clench' in al:
            prepare_color = 'blue'
            cue_color = 'blue'
        else:
            # unknown action type — keep neutral color but still defined
            prepare_color = 'grey'
            cue_color = 'grey'
      Begin Routine:
        # Begin Routine (safe): build prepare/cue strings and assign colors robustly

        # default safe values
        prepare_text = "Prepare..."
        cue_text = "..."
        prepare_color = 'grey'
        cue_color = 'grey'

        # retrieve action if it exists (from conditions file or earlier code)
        try:
            act = str(action).strip()
            if act == 'None' or act == '':
                raise NameError
        except Exception:
            # fallback if 'action' isn't defined or empty
            act = "both eyes blink"  # <-- change this default if you want a different fallback

        # set texts
        prepare_text = "Prepare: " + act
        cue_text = act

        # normalize to lowercase for checks
        al = act.lower()

        # assign colors based on keywords; ensures variables are always assigned
        if 'eye' in al or 'blink' in al:
            prepare_color = 'red'
            cue_color = 'red'
        elif 'jaw' in al or 'clench' in al:
            prepare_color = 'blue'
            cue_color = 'blue'
        else:
            # unknown action type — keep neutral color but still defined
            prepare_color = 'grey'
            cue_color = 'grey'
    TextComponent cueText
      color [set every repeat] = $cue_color
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text [set every repeat] = $cue_text
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    TextComponent prepareText
      color [set every repeat] = $prepare_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $prepare_text
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  Routine intro
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    TextComponent introText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment.

        You will see movement instructions.
        First you will see \”Prepare\”.
        Then you will perform the movement.

        Press SPACE to start.
    KeyboardComponent startKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = actions.xlsx
    loopType = random
    nReps = 50
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    conditions:
      [{'action': 'both eyes blink'},
      {'action': 'left eye blink'},
      {'action': 'right eye blink'},
      {'action': 'both jaw clench'},
      {'action': 'left jaw clench'},
      {'action': 'right jaw clench'}]
    Routine trial
  LoopTerminator trials
